PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1600, 1200]
  Full-screen window = True
  Use version = 1.85.3
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = basicEyetrackerExp
  Screen = 1
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Routines
  Routine calibration_check
    CodeComponent code_4
      Begin Routine:
        #First by default, we are not calibrating
        doing_calibration = False
        done_calibration = False
      Each Frame:
        #If we haven't started calibration but pressed the key earlier, then lets kick things off
        if doing_calibration == False and done_calibration == False and calibrate_check.keys == "c":
            doing_calibration = True
            done_calibration = True
            etrack.calibrate(resume_recording=False)
            doing_calibration = False
        elif done_calibration == False and doing_calibration == False:
            #If both are still false, then we're not calibrating, so skip this
            continueRoutine = False
    TextComponent text
      text = Experimentor, press X when ready to resume
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'x'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine final_calibration_test
    CodeComponent code_5
      Begin Routine:
        win.winHandle.set_visible(False)
        eyetracker.runSetupProcedure()
        win.fullscr = True
        win.winHandle.maximize()
        win.winHandle.set_visible(visible=True)
        win.winHandle.set_fullscreen(True)
        win.winHandle.activate()
        win._setCurrent()
        win.winHandle.switch_to()
        win.flip()
        done_calibration = True
  Routine StartScreen
    TextComponent text_3
      text = Experimentor, press space to start calibration mode.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent eyelink_msg
      Begin Routine:
        etrack.sendMarker("Start Word")
      End Routine:
        etrack.sendMarker("End Word")
    TextComponent show_word
      color [set every repeat] = $colour
      text [set every repeat] = $word
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent calibrate_check
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent ensure_recording
      Each Frame:
        #If for any reason recording has stopped ... i.e. from calibration,
        #then we want it to be when the fixation shows
        if etrack.isRecording() == False:
            etrack.startRecording() #This will change the above state, so it doesn't run more than once
  Routine beginExperiment
    TextComponent instructions
      wrapWidth = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A demo experiment to show recording + calibration on an EyeLink 1000

        Next will be a series of words shown.  When the word is shown, a start marker should be fired to the eyelink EDF.  When the user responds, an end marker should be fired.
        Press space on the screen to simulate a response and move onto the next word.

        When the Fixation cross shows,  press C to call the calibration to occur after the current trial.

        Press space to start.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent start_recorder
      End Routine:
        etrack.startRecording()
  Routine endExperiment
    CodeComponent code_3
      End Experiment:
        # File transfer and cleanup!
        getEYELINK().stopRecording();
        msecDelay(500);
        getEYELINK().setOfflineMode();
        msecDelay(500);

        #Close the file and transfer it to Display PC
        getEYELINK().closeDataFile()
        msecDelay(500);
        #getEYELINK().receiveDataFile(edfFileName, edfFileName)
        msecDelay(500);
        getEYELINK().close();
  Routine endexp
    TextComponent theend
      text = Thank you for participating!
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine setupEyetracker
    CodeComponent code
      Begin Experiment:
        #Import and initiate tracker
        from kent_psylib import *
        etrack = Eyetracker(win,io_config="eyelink1000.yaml",enabled=True)
      Begin Routine:
        #Start calibration
        etrack.calibrate()
      End Experiment:
        #Always stop recording at end of exp
        etrack.stopRecording()
Flow
  Routine setupEyetracker
  Routine beginExperiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'colour': u'red', u'word': u'hello'},
      {u'colour': u'green', u'word': u'world'},
      {u'colour': u'blue', u'word': u'tree'},
      {u'colour': u'yellow', u'word': u'apple'},
      {u'colour': u'red', u'word': u'hedge'},
      {u'colour': u'green', u'word': u'jewel'},
      {u'colour': u'blue', u'word': u'mango'},
      {u'colour': u'yellow', u'word': u'computer'},
      {u'colour': u'red', u'word': u'dog'},
      {u'colour': u'green', u'word': u'cat'}]
    Routine fixation
    Routine trial
    Routine calibration_check
  LoopTerminator trials
  Routine endexp
