PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = template
  Units = use prefs
  Screen = 1
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Routines
  Routine End
    TextComponent end_text
      text = Thank you for your participation!
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine practice_prompt
    TextComponent prac_prompt_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You are about to do a practice run.

        Press space to continue.
    KeyboardComponent prac_prompt_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent main_trial_stim_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A single main trial

        Press Z or M to respond.
    KeyboardComponent main_resp
      forceEndRoutine = True
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.0
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  Routine Intro
    TextComponent intro_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to this experiment.

        Press space to start
    KeyboardComponent intro_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine routine_1
  Routine Instructions
    TextComponent instructions_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Lots of instructions here.

        And here.

        Press space to continue
    KeyboardComponent instructions_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_trial
    TextComponent prac_stim_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A single practice trial

        Press Z or M to respond.
    KeyboardComponent prac_resp
      forceEndRoutine = True
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine main_prompt
    TextComponent main_prompt_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You are now about to start the main trial.

        Press space to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Intro
  Routine Instructions
  Routine practice_prompt
  LoopInitiator prac_trials loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine prac_trial
  LoopTerminator prac_trials
  Routine main_prompt
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine End
